includeFile = beam.txt

####################################################
#----------------- World   --------------------
####################################################
Ge/World/HLX = 45.0 cm
Ge/World/HLY = 45.0 cm
Ge/World/HLZ = 45.0 cm

####################################################
#----------------- RTIonComponent ------------------
####################################################
# Nothing to do

####################################################
#----------------- RTIonSource  --------------------
####################################################
# Nothing to do

####################################################
#----------------- Waterphantom --------------------
####################################################
# Initially waterphantom center is iso
s:Ge/WaterPhantomTop/Type   = "Group"
s:Ge/WaterPhantomTop/Parent = "IEC_F"
d:Ge/WaterPhantomTop/TransX = 0 mm
d:Ge/WaterPhantomTop/TransY = 0 mm
d:Ge/WaterPhantomTop/TransZ = 0.0 cm
d:Ge/WaterPhantomTop/RotX   = 0 deg
d:Ge/WaterPhantomTop/RotY   = 0 deg
d:Ge/WaterPhantomTop/RotZ   = 0 deg

#--- Water phantom target
s:Ge/WaterPhantom/Type="TsBox"
s:Ge/WaterPhantom/Parent="WaterPhantomTop"
#Water: I-value 75 eV
#G4_Water: I-value: 78, ICRU 75 +- 3 eV
s:Ge/WaterPhantom/Material="G4_WATER"
d:Ge/WaterPhantom/HLX= 5.0 cm
d:Ge/WaterPhantom/HLY= 5.0 cm
d:Ge/WaterPhantom/HLZ= 10 cm
d:Ge/WaterPhantom/TransX = 0. cm
d:Ge/WaterPhantom/TransY = 0. cm
d:Ge/WaterPhantom/TransZ = Ge/WaterPhantom/HLZ  cm * -1.0
d:Ge/WaterPhantom/RotX = 0. deg
d:Ge/WaterPhantom/RotY = 0. deg
d:Ge/WaterPhantom/RotZ = 0. deg
s:Ge/WaterPhantom/Color = "blue"

i:Ge/WaterPhantom/XBins  = 50  #2.0 mm 
i:Ge/WaterPhantom/YBins  = 50  #2.0 mm
i:Ge/WaterPhantom/ZBins  = 100 #2.0 mm

####################################################
#----------------- Scorers --------------------
####################################################
s:Sc/DoseGrid_Dw/Quantity    = "DoseToWater"
s:Sc/DoseGrid_Dw/Component   = "WaterPhantom" 
s:Sc/DoseGrid_Dw/OutputFile  = "Dw" 
s:Sc/DoseGrid_Dw/OutputType  = "binary" 
s:Sc/DoseGrid_Dw/IfOutputFileAlreadyExists = "OverWrite" # Exit, Overwrite or Increment
b:Sc/DoseGrid_Dw/PreCalculateStoppingPowerRatios = "True"
b:Sc/DoseGrid_Dw/OutputToConsole = "FALSE"
